Set_Pipeline_Parameter_To_List_Of_Files
/PARAMETER_NAME=filenames
! /FOLDER=E:\Qualisys_repository\PAF-Baseball2\Data\Jim Doe\Baseball Markerless Right-handed\TheiaFormatData
/FOLDER=D:\QTM Projects - Volume_D\2021-11-15 Maastricht\Data\Person 1 and 2_001\2021-11-15_Markerless\TheiaProcessed
/SEARCH_SUBFOLDERS=TRUE
/FILE_MASK=pose_filt_*.c3d
! /ALPHABETIZE=TRUE
! /RETURN_FOLDER_NAMES=FALSE
;

For_Each
/ITERATION_PARAMETER_NAME=filename
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/ITEMS=::filenames
;

File_New

;

File_Open
/FILE_NAME=::filename
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! /SET_PROMPT=File_Open
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! /ON_FILE_NOT_FOUND=PROMPT
;

Select_Active_File
/FILE_NAME=::filename
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=filename_short
/PARAMETER_VALUE=::FILENAME
/PARAMETER_VALUE_SEARCH_FOR=.c3d
/PARAMETER_VALUE_REPLACE_WITH=.json
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! /MULTI_PASS=FALSE
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=FRAME_NUMBERS+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=TIME+pelvis_4X4+l_thigh_4X4+l_shank_4X4+l_foot_4X4+l_toes_4X4+r_thigh_4X4+r_shank_4X4+r_foot_4X4+r_toes_4X4+torso_4X4+l_clavicle_4x4+l_uarm_4X4+l_larm_4X4+l_hand_4X4+r_clavicle_4x4+r_uarm_4X4+r_larm_4X4+r_hand_4X4+head_4X4+pelvis_shifted_4X4
/FILE_NAME=&::filename_short
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=6
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
/USE_JSON_FORMAT=TRUE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
/EXPORT_NAN=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

End_For_Each
/ITERATION_PARAMETER_NAME=filename
;

