Set_Pipeline_Parameter_To_List_Of_Files
/PARAMETER_NAME=filenames
! /FOLDER=E:\Qualisys_repository\PAF-Baseball2\Data\Jim Doe\Baseball Markerless Right-handed\TheiaFormatData
/FOLDER=%s
/SEARCH_SUBFOLDERS=TRUE
/FILE_MASK=pose_filt_*.c3d
! /ALPHABETIZE=TRUE
! /RETURN_FOLDER_NAMES=FALSE
;

For_Each
/ITERATION_PARAMETER_NAME=filename
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/ITEMS=::filenames
;

File_New

;

File_Open
/FILE_NAME=::filename
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! /SET_PROMPT=File_Open
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! /ON_FILE_NOT_FOUND=PROMPT
;

Select_Active_File
/FILE_NAME=::filename
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=filename_short
/PARAMETER_VALUE=::FILENAME
/PARAMETER_VALUE_SEARCH_FOR=.c3d
/PARAMETER_VALUE_REPLACE_WITH=.mat
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! /MULTI_PASS=FALSE
;

Export_Data_To_Matfile
/SIGNAL_TYPES=ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+ROTATION+FRAME_NUMBERS
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=pelvis_4X4+abdomen_4X4+l_thigh_4X4+l_shank_4X4+l_foot_4X4+l_toes_4X4+r_thigh_4X4+r_shank_4X4+r_foot_4X4+r_toes_4X4+torso_4X4+thorax_4X4+l_clavicle_4X4+l_uarm_4X4+l_larm_4X4+l_hand_4X4+r_clavicle_4X4+r_uarm_4X4+r_larm_4X4+r_hand_4X4+neck_4X4+head_4X4+pelvis_shifted_4X4+TIME
/FILE_NAME=&::filename_short
/MATLAB_NAMES=pelvis+abdomen+l_thigh+l_shank+l_foot+l_toes+r_thigh+r_shank+r_foot+r_toes+torso+thorax+l_clavicle+l_uarm+l_larm+l_hand+r_clavicle+r_uarm+r_larm+r_hand+neck+head+pelvis_shifted+TIME
/PARAMETER_NAMES=THEIA3D_VERSION
/PARAMETER_GROUPS=THEIA3D
/OUTPUT_PARAMETER_NAMES=THEIA3D_VERSION
/USE_NAN_FOR_DATANOTFOUND=TRUE
;

End_For_Each
/ITERATION_PARAMETER_NAME=filename
;

Exit_Workspace
;
